CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*/(?P<SlideName>.*)/(?P<ROI>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Megakaryocyte_Marker': 'ROI', 'Membrane1': 'ROI', 'Membrane2': 'ROI', 'Nucleus_Marker': 'ROI', 'Nuclei_intensity': 'ROI'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CD31")
    Name to assign these images:Megakaryocyte_Marker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "HistonH3") (file does contain "Probabilities")
    Name to assign these images:Nucleus_Marker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Seg1")
    Name to assign these images:Membrane1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Seg2")
    Name to assign these images:Membrane2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "HistonH3") (file doesnot contain "Probabilities")
    Name to assign these images:Nuclei_intensity
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ROI

ImageMath:[module_num:5|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Membrane
    Image or measurement?:Image
    Select the first image:Membrane1
    Multiply the first image by:0.001
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    Image or measurement?:Image
    Select the second image:Membrane2
    Multiply the second image by:0.001
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
ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Megakaryocyte
    Image or measurement?:Image
    Select the first image:Megakaryocyte_Marker
    Multiply the first image by:0.0005
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    Image or measurement?:Image
    Select the second image:Megakaryocyte_Marker
    Multiply the second image by:0.0005
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
Threshold:[module_num:7|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
    Select the input image:Megakaryocyte
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:10
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Threshold
    Name the primary objects to be identified:Megakaryocyte
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Megakaryocyte
    Name the output image:Area_Megakaryocyte
    Select the color format:Binary (black & white)
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
MaskImage:[module_num:10|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
    Select the input image:Nucleus_Marker
    Name the output image:MaskSmallObject
    Use objects or an image as a mask?:Image
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    Select image for mask:Area_Megakaryocyte
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:MaskSmallObject
    Name the primary objects to be identified:Small_Nucleus
    Typical diameter of objects, in pixel units (Min,Max):3,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:Nuclei_intensity
    Name the primary objects to be identified:Nukes
    Typical diameter of objects, in pixel units (Min,Max):3,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Nukes
    Name the output image:nuclei_int
    Select the color format:Grayscale
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
MeasureObjectIntensity:[module_num:14|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
    Select images to measure:nuclei_int
    Select objects to measure:Small_Nucleus

CombineObjects:[module_num:15|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
    Select initial object set:Megakaryocyte
    Select object set to combine:Small_Nucleus
    Select how to handle overlapping objects:Preserve
    Name the combined object set:Nucleus

IdentifySecondaryObjects:[module_num:16|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
    Select the input objects:Nucleus
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:Membrane
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:17|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enabled:False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
    Select the input objects:Cells
    Name the output image:Cell_mask_color
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:18|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
    Select the input objects:Cells
    Name the output image:Cell_mask
    Select the color format:uint16
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
Resize:[module_num:19|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enabled:False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
    Select the input image:Cell_mask
    Name the output image:Resize_cell_mask
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:Nucleus_Marker
    Additional image count:0

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Cell_mask
    Select method for constructing file names:Single name
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    Enter single file name:\g<ROI>_segmentation_mask
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<ROI>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:21|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Cell_mask_color
    Select method for constructing file names:Single name
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    Enter single file name:\g<ROI>_segmentation_mask
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<ROI>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Small_Nucleus|Intensity_MinIntensityEdge_nuclei_int,Small_Nucleus|Intensity_IntegratedIntensity_nuclei_int,Small_Nucleus|Intensity_IntegratedIntensityEdge_nuclei_int,Small_Nucleus|Intensity_MassDisplacement_nuclei_int,Small_Nucleus|Intensity_UpperQuartileIntensity_nuclei_int,Small_Nucleus|Intensity_MADIntensity_nuclei_int,Small_Nucleus|Intensity_MaxIntensityEdge_nuclei_int,Small_Nucleus|Intensity_LowerQuartileIntensity_nuclei_int,Small_Nucleus|Intensity_MinIntensity_nuclei_int,Small_Nucleus|Intensity_MeanIntensity_nuclei_int,Small_Nucleus|Intensity_MedianIntensity_nuclei_int,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:metadata_
    Overwrite existing files without warning?:Yes
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